PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = LieDetection
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Routines
  Routine Start
    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Willkommen

        In diesem Experiment geht es um Lügenerkennung.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Baseline
    TextComponent fixation_cross
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine NumberTest
    TextComponent question_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Is the displayed number greater than 10?
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Flow
  Routine Start
  Routine Baseline
  Routine NumberTest
